PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = VMR_demo_copy1
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Routines
  Routine Reach
    PolygonComponent target
      fillColor = red
      nVertices = 180
      pos [set every repeat] = (Targetxx,Targetyy)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0
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    CodeComponent Reach_code
      Code Type = Auto->JS
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      Before Experiment:
        def pol2cart(rho, phi):
            '''
            Converts polar coordinates to cartesian coordinates

            Parameters:
            rho - length from origin
            phi - angle from unit circle 0

            Returns:
            x,y coordinates
            '''
            x = rho * cos(phi)
            y = rho * sin(phi)
            return(x, y)

        def xcoord2cart(rho, phi):
            '''
            Converts polar coordinates to cartesian coordinates

            Parameters:
            rho - length from origin
            phi - angle from unit circle 0

            Returns:
            only x coordinate
            '''
            x = rho * cos(phi)
            return x

        def ycoord2cart(rho, phi):
            '''
            Converts polar coordinates to cartesian coordinates

            Parameters:
            rho - length from origin
            phi - angle from unit circle 0

            Returns:
            Only y coordinate
            '''
            y = rho * sin(phi)
            return y


        def radians(deg):
            '''
            Converts degrees to radians

            Parameters:
            deg - degree

            Returns:
            result in radians
            '''
            Degree = (deg/180)*3.1415
            return Degree

        def degree(rad):
            '''
            Converts radians to degrees

            Parameters:
            rad - radians

            Returns:
            result in degrees
            '''
            Rad = (rad/3.1415)*180
            if Rad < 0:
                Rad = 360 + Rad
            return Rad
      Begin Experiment:
        #Initilize all varibles in begin experiment
        Tx = 0; #Varible for phi component of endpoint


        Targetxx = 0.250315801; #Positions of targets, need to be initilized here
        Targetyy = -0.250315801;

        EndPointCursorx = 5; #Final endpoint positions, intilized outside of visible range
        EndPointCursory = 5;
      Begin Routine:
        #Initilize local varibles
        mouse_2.setVisible(False)
        wait_time = 0
        wait_time2 = 0
        counter = 0
        Cursor_2.setColor('white')


        ###########################

        #Make sure target, endpint invisible to start
        target.opacity = 0;
        EndpointMarker.opacity =0;


        #Convert target file to radians
        rad1 = radians(tgt_angle)

        #Set the target's x,y position
        Targetxx = xcoord2cart(tgt_distance,rad1)
        Targetyy = ycoord2cart(tgt_distance,rad1)
      Each Frame:
        #Find distance from origin to cursor at every frame
        Dist_from_Home = sqrt(((Cursor_2.pos[0]-Invis_Home.pos[0])**2)+(Cursor_2.pos[1]-Invis_Home.pos[1])**2)

        #####################################################
        #Phase 0, using 'counter' to change phases
        #Finding Home phase
        #When cursor within certain distance of home, becomes visible
        #When its within home radius, waits 20 frames then goes to next phase


        if counter ==0:
            Invis_Home.opacity = 1;
            target.opacity = 0;

            if Dist_from_Home > 0.15:
                continueRoutine = True;
                Cursor_2.opacity =0
            if (Dist_from_Home <= 0.15) & (Dist_from_Home > 0.0125):
                continueRoutine = True;

                Cursor_2.opacity =1
            if Dist_from_Home < 0.0125:
                wait_time = wait_time+1
            if wait_time > 20:
                counter=1;
        ##################################################
        #Phase 1
        #REACH Phase
        #Checks target file for online feedback y/n
        #Once cursor crosses 'target ring', goes to next phase

        if counter ==1:
            if online_fb == 1:
                Cursor_2.opacity =1;
            if online_fb == 0:
                Cursor_2.opacity=0;
            Invis_Home.opacity = 0.0;
            target.opacity = 1;


            if Dist_from_Home > 0.354:
                Cursor_2.fillColor = 'gray';
                Cursor_2.opacity=0;
                counter=2

        #Phase 2
        #Endpoint phase
        #Checks target file for endpoint y/n
        #Tx calculates the phi of the cursor
        #Tx plugged into the endpointmarker
        #endpoint stays for 20 frames, then routine ends


        if counter == 2:
            if endpoint_feedback == 1:
                EndpointMarker.opacity =1;
            if endpoint_feedback == 0:
                EndppointMarker.opacity=0;
            #Cursor_2.opacity=1;

            Tx = JustPhi((Cursor_2.pos[0]-Invis_Home.pos[0]),(Cursor_2.pos[1]-Invis_Home.pos[1]))
            wait_time2 = wait_time2+1

            if wait_time2 == 1:
                 EndPointCursorx = xcoord2cart(0.354,Tx);
                 EndPointCursory = ycoord2cart(0.354,Tx);
            if wait_time2 >20:
                continueRoutine = False;
        else:
            continueRoutine = True;
    PolygonComponent Invis_Home
      fillColor = green
      lineColor = blue
      nVertices = 180
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    PolygonComponent Cursor_2
      fillColor = white
      lineColor = gray
      nVertices = 180
      pos [set every frame] = (mouse_2.getPos()[0],mouse_2.getPos()[1])
      shape = circle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent EndpointMarker
      fillColor = white
      nVertices = 180
      pos [set every frame] = (EndPointCursorx, EndPointCursory)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      disabled = True
      fillColor = darkmgray
      pos = (0.65, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Move_Home
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent Cursor
      fillColor = white
      nVertices = 180
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent Home
      fillColor = white
      nVertices = 180
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      vertices = 180
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        #[Tx,Ty] = (tgt_distance, tgt_angle)
      Begin Experiment:
        #win.mouseVisible = False
        mouse.setVisible(False)
        #Start_angle = random.choice([0, 45, 180])
        #[Tx,Ty] = pol2cart(.354, 0)
      Begin Routine:
        mouse.setVisible(False)
        wait_time = 0;
        cur_trial=cur_trial+1
        #[Tx,Ty] = pol2cart(tgt_distance,tgt_angle)
      Each Frame:
        #Dist_from_Home = sqrt((Cursor.pos[0]-Home.pos[0])**2)
        Dist_from_Home = sqrt(((Cursor.pos[0]-Home.pos[0])**2)+(Cursor.pos[1]-Home.pos[1])**2)



        if Dist_from_Home > 0.20:
            continueRoutine = True;
            Cursor.opacity =0
        if (Dist_from_Home <= 0.20) & (Dist_from_Home > 0.0125):
            continueRoutine = True;
            Cursor.opacity =1
        if Dist_from_Home < 0.0125:
            wait_time = wait_time+1
        if wait_time > 10:
            print("hello")
            continueRoutine = False;
  Routine Instr
    TextComponent Instruct_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Move the cursor from the home position to the target that appears
        in a quick fluid movement. Reach directly for the target

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_rotate
    TextComponent Instruct_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please continue reaching for the target

        Press space to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Reach_VMR
    PolygonComponent target_2
      fillColor = red
      nVertices = 180
      ori = 90
      pos [set every frame] = (Targetxx,Targetyy)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    CodeComponent Reach_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #Initilize Global varibles

        #Makes mouse invisble
        win.mouse_2Visible = False

        #Initilize rotated cursor ouside screen bounds
        Rx=5
        Ry=5

        #Rotated cursor's rho and phi
        rho2 = 0
        phi2 = 0

        #Endpoint intilized ouside screen bounds
        EndPointCursorxx = 5;
        EndPointCursoryy = 5;
      Begin Routine:
        #Initilize local varibles
        wait_time = 0
        wait_time2 =0
        counter = 0
        target.opacity = 0;

        #Make sure these are invisbile to start
        EndpointMarker_2.opacity=0;
        Invis_Home_2.opacity = 1

        #Set the target position at the start of each routine
        rad1 = radians(tgt_angle)
        Targetxx = xcoord2cart(tgt_distance,rad1)
        Targetyy = ycoord2cart(tgt_distance,rad1)
      Each Frame:
        #Find distance from origin to cursor at every frame
        Dist_from_Home = sqrt(((mouse_3.getPos()[0]-Invis_Home_2.pos[0])**2)+(mouse_3.getPos()[1]-Invis_Home_2.pos[1])**2)

        #####################################################
        #Phase 0, using 'counter' to change phases
        #Finding Home phase
        #When cursor within certain distance of home, becomes visible
        #When its within home radius, waits 20 frames then goes to next phase

        if counter ==0:
            Invis_Home_2.opacity = 1;
            target_2.opacity = 0;

            if Dist_from_Home > 0.15:
                continueRoutine = True;
                Cursor_mouse.opacity =0
            if (Dist_from_Home <= 0.15) & (Dist_from_Home > 0.0125):
                continueRoutine = True;
                Cursor_mouse.opacity =1
            if Dist_from_Home < 0.0125:
                wait_time = wait_time+1
            if wait_time > 20:
                target_2.opacity = 1;
                Invis_Home_2.opacity = 0.0;
                counter=1;
        ####################################################
        #Phase 1
        #REACH Phase
        #Checks target file for online feedback y/n
        #Sets 'rotated cursor' position based on mouse position
        #Once cursor crosses 'target ring', goes to next phase

        if counter == 1:
            if online_fb == 1:
                Cursor_mouse.opacity =1;
            if online_fb == 0:
                Cursor_mouse.opacity=0;
            Invis_Home.opacity = 0.0;
            target.opacity = 1;
            Cursor_VMR.opacity=1;

            #finds mouse x,y pos and converts to phi in degrees
            [rho2,phi2] = cart2pol(mouse_3.getPos()[0],mouse_3.getPos()[1])
            phi2 = degree(phi2)

            #Rx,Ry fed into Cursor_VMR to set its position
            Rx = (Dist_from_Home)*(cos(radians(phi2-rotation)))
            Ry = (Dist_from_Home)*(sin(radians(phi2-rotation)))

            if Dist_from_Home > 0.354:
                counter = 2

        #Phase 2
        #Endpoint phase
        #Checks target file for endpoint y/n
        #Tx calculates the phi of the rotated cursor
        #Tx plugged into the endpointmarker
        #endpoint stays for 20 frames, then routine ends

        if counter == 2:
            Cursor_VMR.opacity = 0;
            EndpointMarker_2.opacity =1;

            Tx = JustPhi((Cursor_VMR.pos[0]-Invis_Home_2.pos[0]),(Cursor_VMR.pos[1]-Invis_Home_2.pos[1]))

            wait_time2 = wait_time2+1
            if wait_time2 == 1:
                EndPointCursorxx = xcoord2cart(0.354,Tx);
                EndPointCursoryy = ycoord2cart(0.354,Tx);
            if wait_time2 >20:
                continueRoutine = False;
        else:
            continueRoutine = True;
    PolygonComponent Invis_Home_2
      fillColor = blue
      lineColor = blue
      nVertices = 180
      opacity = 0.5
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent Cursor_mouse
      fillColor = white
      nVertices = 180
      pos [set every frame] = (mouse_3.getPos()[0], mouse_3.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent Cursor_VMR
      fillColor = white
      nVertices = 180
      pos [set every frame] = (Rx,Ry)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent EndpointMarker_2
      fillColor = white
      nVertices = 180
      opacity = 0
      pos [set every frame] = (EndPointCursorxx,EndPointCursoryy)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine Instr_wash
    TextComponent Instruct_text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The cursor will now go away, please continue reaching for the target

        Press space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_end
    TextComponent Instruct_text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The End, Thank you!

        Press space to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CodeStartup
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import random, xlrd

        #input file
        in_file = 'Target_file_real.xlsx'

        #trials to load
        numtrials = 128
      Begin Experiment:
        #open the excel file
        inbook = xlrd.open_workbook(in_file)
        insheet = inbook.sheet_by_index(0)

        #array to hold columns
        trialnum = []
        tgt_distance = []
        tgt_angle = []
        rotation = []
        #Loop through rows of tgt file
        for rowx in range(1,numtrials+1):
            #read row
            row = insheet.row_values(rowx)
            trialnum.append(row[0])
            tgt_distance.append(row[1])
            tgt_angle.append(row[2])
            rotation.append(row[3])

        cur_trial = 0
        cur_distance = 0
        cur_angle = 0
        cur_rotation = 0

        #import math
        #start_angle = math.radians(225)
        #[Tx,Ty] = pol2cart(tgt_distance[cur_angle], start_angle)
  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the end

        Thank you for participating!

        Press space to end
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_starter
    CodeComponent code_3
      Code Type = Both
      Before Experiment:
        #IMPORTANT!!!
        #This section is CODE type: BOTH meaning that it doesnt
        #instantly convert to JS
        #This is because these functions do not convert the right way
        #and need to be manually inputted
        #*BE careful when touching these functions*


        #TO run the code through entire target file:
        #set 1st REACH trials to "1:16"
        #set Reach_VMR trials to "17:96"
        #set 2dn REACH trials to "97:105"
        #set 3rd REACH trials to "106:128"

        def cart2pol(x, y):
            '''
            Converts cartesian coordinates to polar coordinates

            Parameters:
            x - x coord
            y - y coord

            Returns:
            rho (distance), phi(angle)
            '''
            rho = sqrt(x**2 + y**2)
            phi = np.arctan2(y, x) #becomes Math.atan2(y,x) on JS side
            return(rho, phi)

        def JustPhi(x,y):
            '''
            Finds just the phi component from cartesian coords
            Parameters:
            x - x coord
            y - y coord

            Returns:
            phi(angle)
            '''
            phi = np.arctan2(y, x)
            return(phi)
      Before JS Experiment:
        function cart2pol(x, y) {
            var phi, rho;
            rho = Math.sqrt((Math.pow(x, 2) + Math.pow(y, 2)));
            phi = Math.atan2(y, x);
            return [rho, phi];
        }

        function JustPhi(x, y) {
            var phi;
            phi = Math.atan2(y, x);
            return [phi];
        }
      Begin Experiment:
        #document.documentElement.style.cursor = 'none';
      Begin JS Experiment:
        document.documentElement.style.cursor = 'none';
  Routine Instr_wash_fb
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        The cursor will now reappear, please continue reaching for the target

        Press space to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine new
    PolygonComponent polygon_2
      fillColor = white
      nVertices = 180
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine Instr
  Routine code_starter
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:16
    conditionsFile = Target_file_real.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialnum': 1, 'tgt_distance': 0.354, 'tgt_angle': 315, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 2, 'tgt_distance': 0.354, 'tgt_angle': 45, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 3, 'tgt_distance': 0.354, 'tgt_angle': 270, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 4, 'tgt_distance': 0.354, 'tgt_angle': 135, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 5, 'tgt_distance': 0.354, 'tgt_angle': 0, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 6, 'tgt_distance': 0.354, 'tgt_angle': 180, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 7, 'tgt_distance': 0.354, 'tgt_angle': 90, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 8, 'tgt_distance': 0.354, 'tgt_angle': 225, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 9, 'tgt_distance': 0.354, 'tgt_angle': 270, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 10, 'tgt_distance': 0.354, 'tgt_angle': 135, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None}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
    Routine Reach
  LoopTerminator trials
  Routine Instr_rotate
  LoopInitiator trials_vmr loopType="TrialHandler"
    Selected rows = 17:96
    conditionsFile = Target_file_real.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialnum': 1, 'tgt_distance': 0.354, 'tgt_angle': 315, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 2, 'tgt_distance': 0.354, 'tgt_angle': 45, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 3, 'tgt_distance': 0.354, 'tgt_angle': 270, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 4, 'tgt_distance': 0.354, 'tgt_angle': 135, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 5, 'tgt_distance': 0.354, 'tgt_angle': 0, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 6, 'tgt_distance': 0.354, 'tgt_angle': 180, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 7, 'tgt_distance': 0.354, 'tgt_angle': 90, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 8, 'tgt_distance': 0.354, 'tgt_angle': 225, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 9, 'tgt_distance': 0.354, 'tgt_angle': 270, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None},
      {'trialnum': 10, 'tgt_distance': 0.354, 'tgt_angle': 135, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'between_blocks': None}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
    Routine Reach_VMR
  LoopTerminator trials_vmr
  Routine Instr_wash
  LoopInitiator trials_washout_nofb loopType="TrialHandler"
    Selected rows = 97:105
    conditionsFile = Target_file_real.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Reach
  LoopTerminator trials_washout_nofb
  Routine Instr_wash_fb
  LoopInitiator trials_washout_fb loopType="TrialHandler"
    Selected rows = 106:128
    conditionsFile = Target_file_real.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialnum': 1, 'tgt_distance': 0.354, 'tgt_angle': 0, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': 0.354, 'Targety': 0},
      {'trialnum': 2, 'tgt_distance': 0.354, 'tgt_angle': 45, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': 0.2503158005400378, 'Targety': 0.25031580054003777},
      {'trialnum': 3, 'tgt_distance': 0.354, 'tgt_angle': 270, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': -6.505538295564772e-17, 'Targety': -0.354},
      {'trialnum': 4, 'tgt_distance': 0.354, 'tgt_angle': 135, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': -0.25031580054003777, 'Targety': 0.2503158005400378},
      {'trialnum': 5, 'tgt_distance': 0.354, 'tgt_angle': 0, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': 0.354, 'Targety': 0},
      {'trialnum': 6, 'tgt_distance': 0.354, 'tgt_angle': 180, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': -0.354, 'Targety': 4.3370255303765146e-17},
      {'trialnum': 7, 'tgt_distance': 0.354, 'tgt_angle': 90, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': 2.1685127651882573e-17, 'Targety': 0.354},
      {'trialnum': 8, 'tgt_distance': 0.354, 'tgt_angle': 225, 'rotation': 30, 'online_fb': 1, 'endpoint_feedback': 0, 'VMR': 0, 'Targetx': -0.2503158005400379, 'Targety': -0.25031580054003777}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
    Routine Reach
  LoopTerminator trials_washout_fb
  Routine End
